PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demo
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Preparation
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    TextComponent instrucao_geral
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nesta tarefa, irá observar pequenos vídeos de situações de jogo.

        Após cada vídeo, surgirá uma imagem congelada do lance e terá de tomar uma decisão com base na informação apresentada no ecrã.
        Responda o mais rapidamente e corretamente possível, utilizando as teclas indicadas. Prima a tecla correspondente à opção apresentada no ecrã (A, B, C, D).

        Entre ensaios, será apresentada uma cruz de fixação ao centro do ecrã; durante esse período, deverá manter o olhar fixo no centro e evitar movimentos desnecessários.

        Antes do início, haverá um breve período de preparação.

        Quando estiver pronto, prima a barra de espaço para começar.
    KeyboardComponent init_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cues
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    SoundComponent soundThree
      forceEndRoutine = False
      sound [set every repeat] = resources/sounds/3_08_0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent soundTwo
      forceEndRoutine = False
      sound [set every repeat] = resources/sounds/2_08_0.wav
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    SoundComponent soundOne
      forceEndRoutine = False
      sound [set every repeat] = resources/sounds/1_08_0.wav
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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  Routine Fixation
    RoutineSettingsComponent Fixation
      stopVal [duration (s)] = 25.0
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    TextComponent baseline_test
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = +
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  Routine Video
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $videos
      size = (1.2, 0.9)
      startVal [time (s)] = 0.0
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  Routine Decision
    RoutineSettingsComponent Decision
      stopVal [duration (s)] = 6.0
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    TextComponent texto_decisao
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Selecione a opção que considera mais adequada para a situação apresentada.

        Decisão?

        Prima A, B, C ou D
    KeyboardComponent key_resp
      allowedKeys = 'a', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine fixation_jitter
    RoutineSettingsComponent fixation_jitter
      stopVal [duration (s)] = 8.0
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    TextComponent fix_trial
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine fixation_post
    RoutineSettingsComponent fixation_post
      stopVal [duration (s)] = 2.5
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    TextComponent fix_cross_post
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine Preparation
  Routine Fixation
  Routine Cues
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = selector.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('videos', './resources/videos/Clip 1 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 2 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 3 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 4 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 5 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 6 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 7 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 8 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 9 - PsychoPY.mp4')]),
      OrderedDict([('videos', './resources/videos/Clip 10 - PsychoPY.mp4')])]
    Routine fixation_jitter
    Routine Video
    Routine Decision
    Routine fixation_post
  LoopTerminator trials
  Routine Fixation
